PsychoPy2experiment version="2026.1.0"
Settings
  Audio lib = ptb
  runMode = False
  Experiment info = {"participant":"f\"{randint(0, 999999):06.0f}\"","session":"001"}
  Monitor = testMonitor
  Screen = 1
  Full-screen window = False
  Window size (pixels) = [1024,768]
  Units = height
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
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    PolygonComponent fixation
      startVal [time (s)] = 0
      fillColor = white
      size = 0.1,0.1
      shape = cross
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    TextComponent target
      startVal [time (s)] = 0
      pos [set every repeat] = (random()-0.5,random()-0.5)
      text = T
      letterHeight = 0.05
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    TextComponent distra
      startVal [time (s)] = 0
      disabled = True
      text = L
      letterHeight = 0.05
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    CodeComponent cod
      Code Type = Auto->JS
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      Begin Routine:
        if random()>0.5:
            num_distra = 10
            thisExp.addData('num_distra', num_distra)
        else:
            num_distra = 5
            thisExp.addData('num_distr', num_distra)
        distractors = []

        for i in range(num_distra):

            distra = visual.TextStim(win=win, name='distra',
                text='L',
                font='Open Sans',
                pos=(random()-0.5, random()-0.5), height=0.1, wrapWidth=None, ori=randint(0,360),
                color='white', colorSpace='rgb', opacity=None,
                languageStyle='LTR',
                depth=0.0);

            distractors.append(distra)


        for distra in distractors:
            distra.setAutoDraw(True)
      End Routine:
        for distra in distractors:
            distra.setAutoDraw(False)
    MouseComponent mouse
      startVal [time (s)] = 0
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      timeRelativeTo = routine
      clickable = target
      saveParamsClickable [set every repeat] = name,
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  Routine begi
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    TextComponent text
      startVal [time (s)] = 0
      letterHeight = 0.05
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      text:
        Hello!
        Welcome to the experiment
        Using the mouse, you need to click on 'T' whenever you see it as fast as possible.
        Press space bar to start
    KeyboardComponent key_resp
      startVal [time (s)] = 0
      forceEndRoutine = True
      allowedKeys = 'space'
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  Routine end
    RoutineSettingsComponent end
      desc = Thank You!
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    TextComponent tex
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text = Thank You!
      letterHeight = 0.05
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Flow
  Routine begi
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 200
    conditions = []
    endPoints = [0,1]
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    Routine trial
  LoopTerminator trials
  Routine end
